# Generated by Configurator on Sun Aug 06 21:28:04 IDT 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,Spectra,Port,COM5
Property,Spectra,SetLE_Type,SpectraX

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,Spectra
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: SpectraXRed
# Preset: NewPreset
ConfigGroup,SpectraXRed,NewPreset,Spectra,Red_Level,100


# Group: Light_SpectraX
# Preset: cyan (475nm)
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Blue_Enable,0
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Cyan_Enable,1
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Green_Enable,0
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Red_Enable,0
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Teal_Enable,0
ConfigGroup,Light_SpectraX,cyan (475nm),Spectra,Violet_Enable,0

# Preset: red (632nm)
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Blue_Enable,0
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Cyan_Enable,0
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Green_Enable,0
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Red_Enable,1
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Teal_Enable,0
ConfigGroup,Light_SpectraX,red (632nm),Spectra,Violet_Enable,0

# Preset: blue (445nm)
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Blue_Enable,1
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Cyan_Enable,0
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Green_Enable,0
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Red_Enable,0
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Teal_Enable,0
ConfigGroup,Light_SpectraX,blue (445nm),Spectra,Violet_Enable,0

# Preset: g_y (572nm)
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Blue_Enable,0
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Cyan_Enable,0
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Green_Enable,1
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Red_Enable,0
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Teal_Enable,0
ConfigGroup,Light_SpectraX,g_y (572nm),Spectra,Violet_Enable,0

# Preset: UV (390nm)
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Blue_Enable,0
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Cyan_Enable,0
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Green_Enable,0
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Red_Enable,0
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Teal_Enable,0
ConfigGroup,Light_SpectraX,UV (390nm),Spectra,Violet_Enable,1

# Preset: teal (512nm)
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Blue_Enable,0
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Cyan_Enable,0
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Green_Enable,0
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Red_Enable,0
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Teal_Enable,1
ConfigGroup,Light_SpectraX,teal (512nm),Spectra,Violet_Enable,0


# Group: SpectraXTeal
# Preset: NewPreset
ConfigGroup,SpectraXTeal,NewPreset,Spectra,Teal_Level,100


# Group: SpectraXGreen/Yellow
# Preset: NewPreset
ConfigGroup,SpectraXGreen/Yellow,NewPreset,Spectra,Green_Level,100


# Group: SpectraXBlue
# Preset: NewPreset
ConfigGroup,SpectraXBlue,NewPreset,Spectra,Blue_Level,100


# Group: SpectraXViolet
# Preset: NewPreset
ConfigGroup,SpectraXViolet,NewPreset,Spectra,Violet_Level,100


# Group: SpectraXCyan
# Preset: NewPreset
ConfigGroup,SpectraXCyan,NewPreset,Spectra,Cyan_Level,100


# Group: CameraMode
# Preset: GCaMP Search Slow
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,AcquisitionWindow,Full Image
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,Binning,4x4
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,ElectronicShutteringMode,Rolling
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,Exposure,300.0045
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,FrameRate,9.0890
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,GCaMP Search Slow,Andor sCMOS Camera,TriggerMode,Software (Recommended for Live Mode)

# Preset: DIC
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,AcquisitionWindow,Full Image
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,Binning,1x1
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,ElectronicShutteringMode,Rolling
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,Exposure,50.0038
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,FrameRate,22.7330
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,CameraMode,DIC,Andor sCMOS Camera,TriggerMode,Internal (Recommended for fast acquisitions)

# Preset: ExtTrigGCaMPExc
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,AcquisitionWindow,1024x1024
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,Binning,8x8
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,Exposure,7.0035
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,FrameRate,103.3732
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,ExtTrigGCaMPExc,Andor sCMOS Camera,TriggerMode,External

# Preset: GCaMP Search
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,AcquisitionWindow,Full Image
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,Binning,2x2
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,ElectronicShutteringMode,Rolling
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,Exposure,99.9984
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,FrameRate,9.0890
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,GCaMP Search,Andor sCMOS Camera,TriggerMode,Software (Recommended for Live Mode)

# Preset: ExtTrigChrimsonPC
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,AcquisitionWindow,1024x1024
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,Binning,1x1
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,Exposure,99.9984
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,FrameRate,9.9909
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,ExtTrigChrimsonPC,Andor sCMOS Camera,TriggerMode,External

# Preset: GFP
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,AcquisitionWindow, 512x512
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,Binning,3x3
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,Exposure,4.9985
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,FrameRate,22.7330
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,GFP,Andor sCMOS Camera,TriggerMode,External Start

# Preset: Snap
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,AcquisitionWindow,Full Image
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,Binning,1x1
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,Exposure,1000.0027
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,FrameRate,0.9999
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,CameraMode,Snap,Andor sCMOS Camera,TriggerMode,Internal (Recommended for fast acquisitions)

# Preset: all_optical
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,AcquisitionWindow,1024x1024
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,Binning,8x8
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,Exposure,4.0
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,FrameRate,103.3732
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,all_optical,Andor sCMOS Camera,TriggerMode,External

# Preset: ExtTrigAllOptical
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,AcquisitionWindow,1024x1024
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,Binning,8x8
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,Exposure,9.9971
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,FrameRate,99.1133
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,ExtTrigAllOptical,Andor sCMOS Camera,TriggerMode,External


# Preset: ExtTrigJEDI2p
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,AcquisitionWindow,1024x1024
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,Binning,2x2
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,ElectronicShutteringMode,Global
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,Exposure,45.0
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,FrameRate,20.0
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)
ConfigGroup,CameraMode,ExtTrigJEDI2p,Andor sCMOS Camera,TriggerMode,External



# PixelSize settings
# Resolution preset: Res1
ConfigPixelSize,Res1,Andor sCMOS Camera,CameraID,SCC-01477
PixelSize_um,Res1,0.651
PixelSizeAffine,Res1,0.651,0.0,0.0,0.0,0.651,0.0
# Resolution preset: Res0
ConfigPixelSize,Res0,Andor sCMOS Camera,CameraID,SCC-01477
PixelSize_um,Res0,0.1619
PixelSizeAffine,Res0,0.1619,0.0,0.0,0.0,0.1619,0.0

